PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Sequence
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Routines
  Routine Instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Watch the sequences of letters.
        When you are certain you know what letter comes next,
        or if you know the sequence is random, press spacebar.

        Press spacebar to start experiment
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blankscreen
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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  Routine InitCode
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        import numpy as np
        from hmmlearn import hmm


        #Length of each trial
        SequenceLength = 20;
        # ARRAYS
        initialization = np.array([1/3,1/3,1/3])
        # Random
        randomtrans = np.array([[1/3,1/3,1/3],[1/3,1/3,1/3],[1/3,1/3,1/3]])
        #'Motif A'
        transmat1 = np.array([[.9,.05,0.05],[.99,.005,0.005],[.99,0.005,0.005]])
        #'Motif B'
        transmat2 = np.array([[0.005,.99,0.005],[.05,.9,0.05],[.005,0.99,0.005]])
        #'Motif C'
        transmat3 = np.array([[0.005,.005,.99],[0.005,.005,.99],[.05,0.05,0.9]])

        #'Motif 'AB'
        transmat4 = np.array([[0.05,.9,0.05],[.9,.05,0.05],[0.495,0.495,0.01]])
        #'Motif 'AC'
        transmat5 = np.array([[0.05,.05,0.9],[.495,.01,0.495],[.9,0.05,0.05]])
        #'Motif 'BC'
        transmat6 = np.array([[0.01,.495,.495],[0.05,.05,.9],[.05,0.9,0.05]])


        #'Motif 'ABC'
        transmat7 = np.array([[0.05,.9,0.05],[.05,.05,0.9],[0.9,0.05,0.05]])
        #'Motif 'ACB'
        transmat8 = np.array([[0.05,.05,0.9],[.9,.05,0.05],[.05,0.9,0.05]])

        # put all together - not used
        transitionMatrix = np.array([randomtrans,transmat1,transmat2,transmat3,transmat4,transmat5,transmat6,transmat7,transmat8]);
        transitionGuide = np.array(['Random','A','B','C','AB','AC','BC','ABC','BAC'])

        # FUNCTION
        def returnsequence(init,transmat,length):
            model = hmm.MultinomialHMM(n_components=3)
            model.startprob_ = init;
            model.transmat_ = transmat;
            model.emissionprob_ = np.array([[1,0,0],[0,1,0],[0,0,1]]);
            [X,Z] = model.sample(length);
            Letters = np.array([]);
            for i in range(0,len(X)):
                if X[i] == 0:
                    Letters = np.append(Letters,'A')
                elif X[i] == 1:
                    Letters = np.append(Letters,'B')
                else:
                    Letters = np.append(Letters,'C')
            return Letters
      Begin JS Experiment:
        // set variables
        var SequenceLength, initialization, randomtrans, transitionGuide,  transmat1, transmat2, transmat3, transmat4, transmat5, transmat6, transmat7, transmat8;
        SequenceLength = 20;
        initialization = [(1 / 3), (1 / 3), (1 / 3)];
        randomtrans = [[(1 / 3), (1 / 3), (1 / 3)], [(1 / 3), (1 / 3), (1 / 3)], [(1 / 3), (1 / 3), (1 / 3)]];
        transmat1 = [[0.9, 0.05, 0.05], [0.99, 0.005, 0.005], [0.99, 0.005, 0.005]];
        transmat2 = [[0.005, 0.99, 0.005], [0.05, 0.9, 0.05], [0.005, 0.99, 0.005]];
        transmat3 = [[0.005, 0.005, 0.99], [0.005, 0.005, 0.99], [0.05, 0.05, 0.9]];
        transmat4 = [[0.05, 0.9, 0.05], [0.9, 0.05, 0.05], [0.495, 0.495, 0.01]];
        transmat5 = [[0.05, 0.05, 0.9], [0.495, 0.01, 0.495], [0.9, 0.05, 0.05]];
        transmat6 = [[0.01, 0.495, 0.495], [0.05, 0.05, 0.9], [0.05, 0.9, 0.05]];
        transmat7 = [[0.05, 0.9, 0.05], [0.05, 0.05, 0.9], [0.9, 0.05, 0.05]];
        transmat8 = [[0.05, 0.05, 0.9], [0.9, 0.05, 0.05], [0.05, 0.9, 0.05]];
        transitionMatrix = [randomtrans, transmat1, transmat2, transmat3, transmat4, transmat5, transmat6, transmat7, transmat8];
        transitionGuide = ["Random", "A", "B", "C", "AB", "AC", "BC", "ABC", "BAC"];

        // FUNCTIONS

        // generating a sequence
        function returnsequence(init, transmat, length) {
            var Letters, model;
            model = new hmm.MultinomialHMM({"n_components": 3});
            model.startprob = init;
            model.transmat = transmat;
            model.emissionprob = np.array([[1, 0, 0], [0, 1, 0], [0, 0, 1]]);
            [X, Z] = model.sample(length);
            Letters = np.array([]);
            for (var i = 0, _pj_a = X.length; (i < _pj_a); i += 1) {
                if ((X[i] === 0)) {
                    Letters = np.append(Letters, "A");
                } else {
                    if ((X[i] === 1)) {
                        Letters = np.append(Letters, "B");
                    } else {
                        Letters = np.append(Letters, "C");
                    }
                }
            }
            return Letters;
        }

        // randomint
        randint = function(min, max) {
          return Math.floor(Math.random() * (max - min) ) + min;
        }
  Routine stimulus
    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        var Letter
        Letter = Letters[count];
        count++;
      Begin Routine:
        Letter = Letters[count]
        count = count+1
      End JS Routine:
        if (key_resp_2.keys) {
            stimuli.finished = 1;
        }
        if (key_resp_3.keys) {
            stimuli.finished = 1;
        }
      End Routine:
        if key_resp_2.keys :
                stimuli.finished=1
        if key_resp_3.keys:
            stimuli.finished=1
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Letter
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine test
    TextComponent Question
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = What letter comes next? 
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    TextComponent text_4
      letterHeight = 0.1
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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      text:
        'A' .... 'B' ... 'C'....
         'Random ( press x)'
    KeyboardComponent SubmitResponse
      allowedKeys = 'a','A','b','B','c','C','x','X'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trialCode
    CodeComponent code_2
      Code Type = Both
      Begin JS Experiment:
        /* Syntax Error: Fix Python code */
      Begin JS Routine:
        var ModelIndex,ModelTrans,Motif,Letters,count

        ModelIndex = randint(0,numModels);
        ModelTrans = transitionMatrixBlock1[ModelIndex];
        Motif = transitionGuideBlock1[ModelIndex];
        Letters = returnsequence(initialization, ModelTrans, SequenceLength);
        count = 0;

        // debug
        // console.log(Letters);
        // console.log(Motif);
      Begin Routine:
        ModelIndex = np.random.randint(numModels)
        ModelTrans = transitionMatrixBlock1[ModelIndex]
        Motif = transitionGuideBlock1[ModelIndex]

        # set up stimuli
        Letters = returnsequence(initialization,ModelTrans,SequenceLength)
        count = 0
        print(Letters)
        print(Motif)
  Routine block1Code
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        var transitionMatrixBlock1,transitionGuideBlock1,numModels
        transitionMatrixBlock1 = [randomtrans, transmat1, transmat2, transmat3, transmat4, transmat5, transmat6];
        transitionGuideBlock1 = ["Random", "A", "B", "C", "AB", "AC", "BC"];
        numModels = transitionMatrixBlock1.length;
      Begin Routine:
        # decide which generating markov models you want present
        transitionMatrixBlock1 = np.array([randomtrans,transmat1,transmat2,transmat3,transmat4,transmat5,transmat6]);
        transitionGuideBlock1 = np.array(['Random','A','B','C','AB','AC','BC'])
        numModels = len(transitionMatrixBlock1)
  Routine blankscreen_2
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine feedback
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        previousLetter = Letter # not perfect
        answer = SubmitResponse.keys
        # make sure right format
        answer = answer.upper()
        print(answer)

        # find location in motif by using previousLetter
        if Motif != 'Random':
            motifLocation = -1
            for i in range(0,len(Motif)):
                if Motif[i] == previousLetter:
                    motifLocation = i

        # they stopped on a random letter - not in motif
        # I think we just judge this wrong
            if motifLocation==(-1):
                Correct='Incorrect'
                ColorFeedback = 'red'
            else:
                if motifLocation==(len(Motif)-1):
                    motifTest = 0
                else:
                    motifTest = motifLocation+1
                if Motif[motifTest] == answer:
                    Correct='Correct'
                    ColorFeedback= 'green'
                else:
                    Correct='Incorrect'
                    ColorFeedback='red'
        else:
            # Random condition
            if answer == 'X':
                Correct='Correct'
                ColorFeedback='green'
            else:
                Correct='Incorrect'
                ColorFeedback='red'
    TextComponent Feedback
      color [set every repeat] = $ColorFeedback
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Correct
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Flow
  Routine Instructions
  Routine InitCode
  Routine block1Code
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trialCode
    LoopInitiator stimuli loopType="TrialHandler"
      loopType = random
      nReps = $SequenceLength
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      Routine stimulus
      Routine blankscreen
    LoopTerminator stimuli
    Routine test
    Routine feedback
    Routine blankscreen_2
  LoopTerminator trials
